// Hyperparameters 
N_RUNS =  10// Number of runs per group
PP_freq_ = 1 //

// Load cell templates and network 
err_ = load_file("objects/GC.hoc")
err_ = load_file("objects/BC.hoc")
err_ = load_file("objects/MC.hoc")
err_ = load_file("objects/HIPP.hoc")
err_ = load_file("objects/PP.hoc")
err_ = load_file("objects/DentateGyrus.hoc")

// Instantiate cell objects and labels
objref th, al, gm
strdef tlab, alab, glab 

// Do N_RUNS Runs for each network setting
for random_state = 1, N_RUNS {
    PP_freq_ = 2
    sprint(tlab, "%s-%d", "theta", random_state) 
    th = new DentateGyrus(tlab, random_state, "theta")

    print "RUNNING DENTATE GYRUS ", tlab
    th.run()
    
    
    PP_freq_ = 12
    sprint(alab, "%s-%d", "alpha", random_state)
    al = new DentateGyrus(alab, random_state, "alpha")

    print "RUNNING DENTATE GYRUS ", alab
    al.run()

    PP_freq_ = 30
    sprint(glab, "%s-%d", "gamma", random_state)
    gm = new DentateGyrus(glab, random_state, "gamma")

    print "RUNNING DENTATE GYRUS ", glab
    gm.run()
    
}
